s:Ge/World/Material  = "Vacuum"
d:Ge/World/HLX       = 2.0 m
d:Ge/World/HLY       = 2.0 m
d:Ge/World/HLZ       = 2.0 m
b:Ge/World/Invisible = "TRUE"


s:Ge/PhaseVol/Parent     = "World"
s:Ge/PhaseVol/Type       =  "TsBox"
s:Ge/PhaseVol/Material   = "Air"
d:Ge/PhaseVol/HLX        = .5 m
d:Ge/PhaseVol/HLY        = .5 m
d:Ge/PhaseVol/HLZ        = .05 cm
d:Ge/PhaseVol/TransX     = 0. m
d:Ge/PhaseVol/TransY     = 0. m
d:Ge/PhaseVol/TransZ     = 0.42 m
d:Ge/PhaseVol/RotX       = 0. deg
d:Ge/PhaseVol/RotY       = 0. deg
d:Ge/PhaseVol/RotZ       = 0. deg


b:Ts/PauseBeforeQuit = "False"
b:Ge/QuitIfOverlapDetected= "False"


s:Ge/BeamPosition/Parent="World"
s:Ge/BeamPosition/Type="Group"
d:Ge/BeamPosition/TransX=0. m
d:Ge/BeamPosition/TransY=0. m
d:Ge/BeamPosition/TransZ= 0.42 m
d:Ge/BeamPosition/RotX=180. deg
d:Ge/BeamPosition/RotY=0. deg
d:Ge/BeamPosition/RotZ=0. deg


s:So/ProtonSource/Type = "emittance"
s:So/ProtonSource/Component                = "BeamPosition"
s:So/ProtonSource/BeamParticle             = "proton"
s:So/ProtonSource/Distribution = "BiGaussian"
d:So/ProtonSource/BeamEnergy               = 139.8030000 MeV
u:So/ProtonSource/BeamEnergySpread         = 0.8435087
d:So/ProtonSource/SigmaX = 3.614559880 mm
u:So/ProtonSource/SigmaXprime = 0.003873700
u:So/ProtonSource/CorrelationX = 0.147399894
d:So/ProtonSource/SigmaY = 3.186647010 mm
u:So/ProtonSource/SigmaYprime = 0.003939700
u:So/ProtonSource/CorrelationY = 0.419325220


i:So/ProtonSource/NumberOfHistoriesInRun = 3619246
i:Ts/ShowHistoryCountAtInterval = 10000


s:Sc/PhaseSpAtPhaseVol_140MeV/Quantity                    = "PhaseSpace"
b:Sc/PhaseSpAtPhaseVol_140MeV/OutputToConsole             = "True"
s:Sc/PhaseSpAtPhaseVol_140MeV/Surface                     = "PhaseVol/ZMinusSurface"
s:Sc/PhaseSpAtPhaseVol_140MeV/OutputType                  = "ASCII" # ASCII or Binary
s:Sc/PhaseSpAtPhaseVol_140MeV/OutputFile                  = "PhaseSpASCII"
i:Sc/PhaseSpAtPhaseVol_140MeV/OutputBufferSize            = 1000
#s:Sc/PhaseSpAtPhaseVol_140MeV/OnlyIncludeParticlesGoing  = "In"
b:Sc/PhaseSpAtPhaseVol_140MeV/IncludeRunID                = "True"
b:Sc/PhaseSpAtPhaseVol_140MeV/IncludeEventID              = "True"
b:Sc/PhaseSpAtPhaseVol_140MeV/IncludeTrackID              = "True"
b:Sc/PhaseSpAtPhaseVol_140MeV/IncludeTime                 = "True"
b:Sc/PhaseSpAtPhaseVol_140MeV/IncludeSeed                 = "True"
s:Sc/PhaseSpAtPhaseVol_140MeV/IfOutputFileAlreadyExists   = "Overwrite" # Exit, Overwrite or Increment
b:Sc/PhaseSpAtPhaseVol_140MeV/OutputAfterRun              = "True"
sv:Ph/Default/Modules   = 6 "g4em-standard_opt4" "g4h-phy_QGSP_BIC_HP" "g4decay" "g4ion-binarycascade" "g4h-elastic_HP" "g4stopping"
